[
    {
        "object.className": "WARPholeImportParticles",
        "object.id": "4622",
        "object.label": "WARPhole - Import dataset34",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "starFile": "/media/odin/genval/dataset34/goodparticles_BoxNet2Mask_20180918.star",
        "fileTimeout": 1500.0,
        "copyBinaries": false,
        "dosePerFrame": 0.87,
        "magnification": 165000.0,
        "moviePixelSize": 0.505,
        "doImportAlignedMovies": true,
        "movieTimeout": 72000.0
    },
    {
        "object.className": "XmippProtTriggerData",
        "object.id": "4659",
        "object.label": "xmipp3 - trigger data",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "outputSize": 10000,
        "allImages": true,
        "splitImages": true,
        "delay": 100,
        "inputImages": "4622.outputParticles1"
    },
    {
        "object.className": "ProtMonitor2dStreamerCumulative",
        "object.id": "4694",
        "object.label": "WARPhole - 2d streamer",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "batchSize": 20000,
        "startingNumber": 1,
        "cumulative": true,
        "samplingInterval": 10,
        "inputParticles": "4622.outputParticles1",
        "input2dProtocol": "4732."
    },
    {
        "object.className": "ProtCryo2D",
        "object.id": "4732",
        "object.label": "cryosparc2 - 2d classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "numberOfClasses": 100,
        "maximunResolution": 10,
        "initialClassification": 2.0,
        "useCircular2D": true,
        "class2D_window_inner_A": 150.0,
        "class2D_window_outer_A": null,
        "reCenter2D": true,
        "reCenterMask": 0.2,
        "reCenterMaskBinary": false,
        "forceMaxover": true,
        "ctfFlipPhases": false,
        "numberFinalIterator": 2,
        "numberOnlineEMIterator": 20,
        "batchSizeClass": 200,
        "initialScale2D": 1,
        "zeropadFactor": 2,
        "useFRCRegularized": true,
        "useFullFRC": true,
        "iterationToStartAnneling": 2,
        "iterationToStartAnneal": 15,
        "useWhiteNoiseModel": false,
        "compute_use_ssd": true,
        "gpuList": "1",
        "compute_lane": "default",
        "inputParticles": "4659.outputParticles1"
    }
]